CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:20140723173957
GitHash:6c2d896
ModuleCount:5
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
RunImageJ:[module_num:5|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
    Run an ImageJ command or macro?:Macro
    Command:None
    Macro:run("mosaic pt");\\u000a
    Macro language:Java
    Input the currently active image in ImageJ?:Yes
    Select the input image:DNA
    Retrieve the currently active image from ImageJ?:Yes
    Name the current output image:ImageJImage
    Wait for ImageJ before continuing?:No
    Function to run before each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Function to run after each group of images?:Nothing
    Command:None
    Macro:run("Invert");
    Retrieve the image output by the group operation?:No
    Name the group output image:ImageJGroupImage
    Command settings count:0
    Prepare group command settings count:0
    Post-group command settings count:0
